<MorpheusModel version="4">
	<Time>
		<StartTime value="20"/>
		<StopTime value="100"/>
		<SaveInterval value="10"/>
		<RandomSeed value="0"/>
		<TimeSymbol symbol="time"/>
	</Time>
	<Description>
		<Title>Example-CellSorting-3D</Title>
		<Details>Reference:
Graner and Glazier, Simulation of biological cell sorting using a two-dimensional extended Potts model, Phys. Rev. Lett. 69, 2013–2016 (1992)</Details>
	</Description>
	<Space>
		<SpaceSymbol symbol="l"/>
		<Lattice class="cubic">
			<Size value="100, 100, 100" symbol="size"/>
			<BoundaryConditions>
				<Condition type="periodic" boundary="x"/>
				<Condition type="periodic" boundary="y"/>
			</BoundaryConditions>
			<Neighborhood>
				<Order>2</Order>
			</Neighborhood>
		</Lattice>
	</Space>
	<Global>
    <!--
		<Variable value="0.0" name="Boundary length of CT1 with other cell types" symbol="boundary" value="0.076923076923" value="0.076923076923" value="0.076923076923" value="0.076923076923"/>
    -->
		<Constant value="0.0" symbol="b"/>
		<Constant value="0.0" symbol="b2"/>
	</Global>
	<CellTypes>
		<CellType name="medium" class="medium"/>
		<CellType name="ct1" class="biological">
			<VolumeConstraint strength="1" target="1000"/>
			<NeighborhoodReporter>
				<Input scaling="length" value="cell.type == celltype.ct2.id"/>
				<Output mapping="sum" symbol-ref="boundary"/>
			</NeighborhoodReporter>
			<Property value="0" symbol="b"/>
			<NeighborhoodReporter>
				<Input scaling="cell" value="cell.type == celltype.ct2.id"/>
				<Output mapping="sum" symbol-ref="b"/>
			</NeighborhoodReporter>
			<NeighborhoodReporter>
				<Input scaling="length" value="cell.type == celltype.ct2.id"/>
				<Output mapping="sum" symbol-ref="b2"/>
			</NeighborhoodReporter>
			<Property value="0" name="Interface with ct2" symbol="b2"/>
		</CellType>
		<CellType name="ct2" class="biological">
			<VolumeConstraint strength="1" target="1000"/>
			<Property value="0" symbol="b"/>
			<NeighborhoodReporter>
				<Input scaling="cell" value="cell.type == celltype.ct1.id"/>
				<Output mapping="sum" symbol-ref="b"/>
			</NeighborhoodReporter>
			<Property value="0" name="Interface with ct1" symbol="b2"/>
			<NeighborhoodReporter>
				<Input scaling="length" value="cell.type == celltype.ct1.id"/>
				<Output mapping="sum" symbol-ref="b2"/>
			</NeighborhoodReporter>
		</CellType>
	</CellTypes>
	<CPM>
		<Interaction default="0.0">
			<Contact value="12" type1="ct1" type2="medium"/>
			<Contact value="6" type1="ct2" type2="medium"/>
			<Contact value="6" type1="ct1" type2="ct1"/>
			<Contact value="6" type1="ct2" type2="ct2"/>
			<Contact value="16" type1="ct1" type2="ct2"/>
		</Interaction>
		<MonteCarloSampler stepper="edgelist">
			<MCSDuration value="1"/>
			<Neighborhood>
				<Order>2</Order>
			</Neighborhood>
			<MetropolisKinetics temperature="2"/>
		</MonteCarloSampler>
		<ShapeSurface scaling="norm">
			<Neighborhood>
				<Distance>2.5</Distance>
			</Neighborhood>
		</ShapeSurface>
	</CPM>
	<Analysis>
		<ModelGraph include-tags="#untagged" format="svg" reduced="false"/>
		<VtkPlotter time-step="10" mode="ascii">
			<Channel symbol-ref="cell.id"/>
		</VtkPlotter>
	</Analysis>
	<CellPopulations>
		<Population type="medium" size="1">
			<Cell id="0"/>
		</Population>
		<Population type="ct1" size="30">
			<Cell id="1">
				<PropertyData symbol-ref="b" value="0"/>
				<PropertyData symbol-ref="b2" value="0"/>
				<Center>60.214214214,37.243243243,65.238238238</Center>
				<Nodes>53, 36, 51;58, 36, 52;58, 39, 57;58, 37, 58;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72</Nodes>
			</Cell>
			<Cell id="2">
				<PropertyData symbol-ref="b" value="0"/>
				<PropertyData symbol-ref="b2" value="0"/>
				<Center>71.096288867,42.956870612,44.121364092</Center>
				<Nodes>71, 42, 35;70, 43, 35;72, 42, 36;70, 43, 36;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52</Nodes>
			</Cell>
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		</Population>
		<Population type="ct2" size="30">
			<Cell id="31">
				<PropertyData symbol-ref="b" value="0"/>
				<PropertyData symbol-ref="b2" value="0"/>
				<Center>66.947895792,69.182364729,52.226452906</Center>
				<Nodes>67, 66, 45;66, 67, 45;67, 67, 45;65, 68, 45;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60</Nodes>
			</Cell>
			<Cell id="32">
				<PropertyData symbol-ref="b" value="0"/>
				<PropertyData symbol-ref="b2" value="0"/>
				<Center>43.487975952,61.059118236,63.518036072</Center>
				<Nodes>43, 63, 52;45, 58, 53;43, 62, 53;44, 62, 53;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75</Nodes>
			</Cell>
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		</Population>
	</CellPopulations>
</MorpheusModel>
