<MorpheusModel version="4">
	<Time>
		<StartTime value="90"/>
		<StopTime value="100"/>
		<SaveInterval value="10"/>
		<RandomSeed value="0"/>
		<TimeSymbol symbol="time"/>
	</Time>
	<Description>
		<Title>Example-CellSorting-3D</Title>
		<Details>Reference:
Graner and Glazier, Simulation of biological cell sorting using a two-dimensional extended Potts model, Phys. Rev. Lett. 69, 2013–2016 (1992)</Details>
	</Description>
	<Space>
		<SpaceSymbol symbol="l"/>
		<Lattice class="cubic">
			<Size value="100, 100, 100" symbol="size"/>
			<BoundaryConditions>
				<Condition type="periodic" boundary="x"/>
				<Condition type="periodic" boundary="y"/>
			</BoundaryConditions>
			<Neighborhood>
				<Order>2</Order>
			</Neighborhood>
		</Lattice>
	</Space>
	<Global>
    <!--
		<Variable value="0.0" name="Boundary length of CT1 with other cell types" symbol="boundary" value="0.076923076923" value="0.076923076923" value="0.076923076923" value="0.076923076923" value="0.076923076923" value="0.076923076923" value="0.076923076923" value="0.076923076923" value="0.076923076923" value="0.076923076923" value="0.076923076923"/>
    -->
		<Constant value="0.0" symbol="b"/>
		<Constant value="0.0" symbol="b2"/>
	</Global>
	<CellTypes>
		<CellType name="medium" class="medium"/>
		<CellType name="ct1" class="biological">
			<VolumeConstraint strength="1" target="1000"/>
			<NeighborhoodReporter>
				<Input scaling="length" value="cell.type == celltype.ct2.id"/>
				<Output mapping="sum" symbol-ref="boundary"/>
			</NeighborhoodReporter>
			<Property value="0" symbol="b"/>
			<NeighborhoodReporter>
				<Input scaling="cell" value="cell.type == celltype.ct2.id"/>
				<Output mapping="sum" symbol-ref="b"/>
			</NeighborhoodReporter>
			<NeighborhoodReporter>
				<Input scaling="length" value="cell.type == celltype.ct2.id"/>
				<Output mapping="sum" symbol-ref="b2"/>
			</NeighborhoodReporter>
			<Property value="0" name="Interface with ct2" symbol="b2"/>
		</CellType>
		<CellType name="ct2" class="biological">
			<VolumeConstraint strength="1" target="1000"/>
			<Property value="0" symbol="b"/>
			<NeighborhoodReporter>
				<Input scaling="cell" value="cell.type == celltype.ct1.id"/>
				<Output mapping="sum" symbol-ref="b"/>
			</NeighborhoodReporter>
			<Property value="0" name="Interface with ct1" symbol="b2"/>
			<NeighborhoodReporter>
				<Input scaling="length" value="cell.type == celltype.ct1.id"/>
				<Output mapping="sum" symbol-ref="b2"/>
			</NeighborhoodReporter>
		</CellType>
	</CellTypes>
	<CPM>
		<Interaction default="0.0">
			<Contact value="12" type1="ct1" type2="medium"/>
			<Contact value="6" type1="ct2" type2="medium"/>
			<Contact value="6" type1="ct1" type2="ct1"/>
			<Contact value="6" type1="ct2" type2="ct2"/>
			<Contact value="16" type1="ct1" type2="ct2"/>
		</Interaction>
		<MonteCarloSampler stepper="edgelist">
			<MCSDuration value="1"/>
			<Neighborhood>
				<Order>2</Order>
			</Neighborhood>
			<MetropolisKinetics temperature="2"/>
		</MonteCarloSampler>
		<ShapeSurface scaling="norm">
			<Neighborhood>
				<Distance>2.5</Distance>
			</Neighborhood>
		</ShapeSurface>
	</CPM>
	<Analysis>
		<ModelGraph include-tags="#untagged" format="svg" reduced="false"/>
		<VtkPlotter time-step="10" mode="ascii">
			<Channel symbol-ref="cell.id"/>
		</VtkPlotter>
	</Analysis>
	<CellPopulations>
		<Population type="medium" size="1">
			<Cell id="0"/>
		</Population>
		<Population type="ct1" size="30">
			<Cell id="1">
				<PropertyData symbol-ref="b" value="0"/>
				<PropertyData symbol-ref="b2" value="0"/>
				<Center>57.110220441,38.472945892,64.667334669</Center>
				<Nodes>53, 39, 59;54, 39, 59;55, 39, 59;55, 40, 59;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71</Nodes>
			</Cell>
			<Cell id="2">
				<PropertyData symbol-ref="b" value="0"/>
				<PropertyData symbol-ref="b2" value="0"/>
				<Center>70.26753507,40.365731463,42.058116232</Center>
				<Nodes>68, 40, 35;69, 41, 35;67, 38, 36;68, 38, 36;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49</Nodes>
			</Cell>
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		</Population>
		<Population type="ct2" size="30">
			<Cell id="31">
				<PropertyData symbol-ref="b" value="0"/>
				<PropertyData symbol-ref="b2" value="0"/>
				<Center>66.918918919,69.60960961,52.940940941</Center>
				<Nodes>66, 67, 46;66, 69, 46;67, 69, 46;68, 70, 46;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61</Nodes>
			</Cell>
			<Cell id="32">
				<PropertyData symbol-ref="b" value="0"/>
				<PropertyData symbol-ref="b2" value="0"/>
				<Center>40.567567568,63.3003003,65.211211211</Center>
				<Nodes>42, 61, 59;41, 62, 59;42, 62, 59;40, 63, 59;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72</Nodes>
			</Cell>
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		</Population>
	</CellPopulations>
</MorpheusModel>
