<MorpheusModel version="4">
	<Time>
		<StartTime value="100"/>
		<StopTime value="100"/>
		<SaveInterval value="10"/>
		<RandomSeed value="0"/>
		<TimeSymbol symbol="time"/>
	</Time>
	<Description>
		<Title>Example-CellSorting-3D</Title>
		<Details>Reference:
Graner and Glazier, Simulation of biological cell sorting using a two-dimensional extended Potts model, Phys. Rev. Lett. 69, 2013–2016 (1992)</Details>
	</Description>
	<Space>
		<SpaceSymbol symbol="l"/>
		<Lattice class="cubic">
			<Size value="100, 100, 100" symbol="size"/>
			<BoundaryConditions>
				<Condition type="periodic" boundary="x"/>
				<Condition type="periodic" boundary="y"/>
			</BoundaryConditions>
			<Neighborhood>
				<Order>2</Order>
			</Neighborhood>
		</Lattice>
	</Space>
	<Global>
    <!--
		<Variable value="0.0" name="Boundary length of CT1 with other cell types" symbol="boundary" value="0.076923076923" value="0.076923076923" value="0.076923076923" value="0.076923076923" value="0.076923076923" value="0.076923076923" value="0.076923076923" value="0.076923076923" value="0.076923076923" value="0.076923076923" value="0.076923076923" value="3874.7435897" value="3874.7435897"/>
    -->
		<Constant value="0.0" symbol="b"/>
		<Constant value="0.0" symbol="b2"/>
	</Global>
	<CellTypes>
		<CellType name="medium" class="medium"/>
		<CellType name="ct1" class="biological">
			<VolumeConstraint strength="1" target="1000"/>
			<NeighborhoodReporter>
				<Input scaling="length" value="cell.type == celltype.ct2.id"/>
				<Output mapping="sum" symbol-ref="boundary"/>
			</NeighborhoodReporter>
			<Property value="0" symbol="b"/>
			<NeighborhoodReporter>
				<Input scaling="cell" value="cell.type == celltype.ct2.id"/>
				<Output mapping="sum" symbol-ref="b"/>
			</NeighborhoodReporter>
			<NeighborhoodReporter>
				<Input scaling="length" value="cell.type == celltype.ct2.id"/>
				<Output mapping="sum" symbol-ref="b2"/>
			</NeighborhoodReporter>
			<Property value="0" name="Interface with ct2" symbol="b2"/>
		</CellType>
		<CellType name="ct2" class="biological">
			<VolumeConstraint strength="1" target="1000"/>
			<Property value="0" symbol="b"/>
			<NeighborhoodReporter>
				<Input scaling="cell" value="cell.type == celltype.ct1.id"/>
				<Output mapping="sum" symbol-ref="b"/>
			</NeighborhoodReporter>
			<Property value="0" name="Interface with ct1" symbol="b2"/>
			<NeighborhoodReporter>
				<Input scaling="length" value="cell.type == celltype.ct1.id"/>
				<Output mapping="sum" symbol-ref="b2"/>
			</NeighborhoodReporter>
		</CellType>
	</CellTypes>
	<CPM>
		<Interaction default="0.0">
			<Contact value="12" type1="ct1" type2="medium"/>
			<Contact value="6" type1="ct2" type2="medium"/>
			<Contact value="6" type1="ct1" type2="ct1"/>
			<Contact value="6" type1="ct2" type2="ct2"/>
			<Contact value="16" type1="ct1" type2="ct2"/>
		</Interaction>
		<MonteCarloSampler stepper="edgelist">
			<MCSDuration value="1"/>
			<Neighborhood>
				<Order>2</Order>
			</Neighborhood>
			<MetropolisKinetics temperature="2"/>
		</MonteCarloSampler>
		<ShapeSurface scaling="norm">
			<Neighborhood>
				<Distance>2.5</Distance>
			</Neighborhood>
		</ShapeSurface>
	</CPM>
	<Analysis>
		<ModelGraph include-tags="#untagged" format="svg" reduced="false"/>
		<VtkPlotter time-step="10" mode="ascii">
			<Channel symbol-ref="cell.id"/>
		</VtkPlotter>
	</Analysis>
	<CellPopulations>
		<Population type="medium" size="1">
			<Cell id="0"/>
		</Population>
		<Population type="ct1" size="30">
			<Cell id="1">
				<PropertyData symbol-ref="b" value="8"/>
				<PropertyData symbol-ref="b2" value="270.53846154"/>
				<Center>56.55955956,38.994994995,64.268268268</Center>
				<Nodes>54, 39, 58;54, 40, 58;55, 40, 58;55, 41, 58;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70</Nodes>
			</Cell>
			<Cell id="2">
				<PropertyData symbol-ref="b" value="5"/>
				<PropertyData symbol-ref="b2" value="138.05128205"/>
				<Center>69.755511022,40.138276553,41.69238477</Center>
				<Nodes>66, 40, 35;67, 40, 35;68, 41, 35;62, 43, 35;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48</Nodes>
			</Cell>
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		</Population>
		<Population type="ct2" size="30">
			<Cell id="31">
				<PropertyData symbol-ref="b" value="0"/>
				<PropertyData symbol-ref="b2" value="0"/>
				<Center>66.902,69.745,53.059</Center>
				<Nodes>69, 67, 46;66, 68, 46;67, 68, 46;69, 69, 46;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60</Nodes>
			</Cell>
			<Cell id="32">
				<PropertyData symbol-ref="b" value="2"/>
				<PropertyData symbol-ref="b2" value="58.743589744"/>
				<Center>40.295295295,63.567567568,65.291291291</Center>
				<Nodes>40, 62, 59;41, 62, 59;36, 66, 59;39, 60, 60;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72</Nodes>
			</Cell>
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		</Population>
	</CellPopulations>
</MorpheusModel>
